<CompuCell3D Revision="0" Version="4.4.0">

   <Metadata>
      <!-- Basic properties simulation -->
      <NumberOfProcessors>8</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>

   <!-- definition time: 1[mcs] = 1/10[min] = PhysiCell dt_mechanics -->
   <!-- definition length: 1[px] = 1[um] -->

   <Potts>
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1500" y="1500" z="1"/> <!-- 3000[um] = 1500[px] -->
      <Steps>78000000</Steps> <!-- 78000[mcs] = 7800[min] = 130[h] = 5.416667[d] * 10**(3)-->
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>

   </Potts>

   <Plugin Name="CellType">
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Necrotic"/>
      <CellType TypeId="2" TypeName="Hypoxia"/>
      <CellType TypeId="3" TypeName="GFP"/>
      <CellType TypeId="4" TypeName="DsRed"/>
   </Plugin>

   <Plugin Name="Volume"/>

   <!--
   <Plugin Name="Surface"/>
   -->

   <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
   <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->

   <!--
   <Plugin Name="ExternalPotential">
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   -->

   <Plugin Name="CenterOfMass"></Plugin>

   <!--
   <Plugin Name="NeighborTracker"></Plugin>
   -->

   <!--
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Necrotic">10.0</Energy>
      <Energy Type1="Medium" Type2="GFP">10.0</Energy>
      <Energy Type1="Medium" Type2="DsRed">10.0</Energy>
      <Energy Type1="Necrotic" Type2="Necrotic">10.0</Energy>
      <Energy Type1="Necrotic" Type2="GFP">10.0</Energy>
      <Energy Type1="Necrotic" Type2="DsRed">10.0</Energy>
      <Energy Type1="GFP" Type2="GFP">10.0</Energy>
      <Energy Type1="GFP" Type2="DsRed">10.0</Energy>
      <Energy Type1="DsRed" Type2="DsRed">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   -->

   <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
   <!-- Specification of chemotaxis properties of select cell types. -->

   <Plugin Name="Chemotaxis">
      <ChemicalField Name="oxygen">
         <ChemotaxisByType ChemotactTowards="Medium" Lambda="0.00001469" Type="DsRed"/>
         <ChemotaxisByType ChemotactTowards="Medium" Lambda="0.00001469" Type="Hypoxia"/>
         <ChemotaxisByType ChemotactTowards="Medium" Lambda="0.000023775" Type="GFP"/>
      </ChemicalField>
   </Plugin>

   <!-- Specification of secretion properties of select cell types. -->
   <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
   <!-- Specification of secretion properties of individual cells can be done in Python -->
   <!-- <Secretion Type="Necrotic">0.1</Secretion> &ndash;&gt;  -->
   <!-- <Secretion Type="DsRed">0.1</Secretion> -->
   <!-- <Secretion Type="GFP">0.1</Secretion> -->
   <!--
   <Plugin Name="Secretion">
      <Field Name="oxygen">
      </Field>
   </Plugin>
   -->

   <Steppable Type="DiffusionSolverFE">
      <!-- Specification of PDE solvers -->

      <DiffusionField Name="oxygen">
         <DiffusionData>
            <FieldName>oxygen</FieldName>
            <GlobalDiffusionConstant>5.0</GlobalDiffusionConstant> <!-- 100000[um/min] = 50000[px/min] = 5000[px/min] * 10**(-3) -->
            <GlobalDecayConstant>0.00001</GlobalDecayConstant>  <!-- 0.1[1/min] = 0.01[1/mcs] * 10**(-3) -->
            <InitialConcentrationExpression>45.94</InitialConcentrationExpression>  <!-- 45.94[mmHg] -->
            <DiffusionCoefficient CellType="Necrotic">5.0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Hypoxia">5.0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="GFP">5.0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="DsRed">5.0</DiffusionCoefficient>
            <DecayCoefficient CellType="Necrotic">0.0</DecayCoefficient>  <!-- 10[1/min] = 1[1/mcs] * 10**(-3) -->
            <DecayCoefficient CellType="Hypoxia">0.001</DecayCoefficient>  <!-- 10[1/min] = 1[1/mcs] * 10**(-3) -->
            <DecayCoefficient CellType="GFP">0.001</DecayCoefficient>  <!-- 10[1/min] = 1[1/mcs] * 10**(-3) -->
            <DecayCoefficient CellType="DsRed">0.001</DecayCoefficient>  <!-- 10[1/min] = 1[1/mcs] * 10**(-3) -->
         </DiffusionData>

         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         <SecretionData>
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Necrotic">0.1</Secretion> -->
            <!-- <Secretion Type="GFP">0.1</Secretion> -->
            <!-- <Secretion Type="DsRed">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Necrotic,GFP,DsRed" Type="DsRed">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="DsRed">0.1</ConstantConcentration> -->
         </SecretionData>


         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="45.94"/>  <!-- 45.94 mmHG -->
               <ConstantValue PlanePosition="Max" Value="45.94"/>
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="45.94"/>
               <ConstantValue PlanePosition="Max" Value="45.94"/>
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>

   </Steppable>

   <Steppable Type="BlobInitializer">
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="750" y="750" z="0"/>
         <Radius>125</Radius>  <!-- 250um = 125[px]-->
         <Gap>0</Gap>
         <Width>7</Width>  <!-- ((2492[um**3])**(1/3) / 2[px/um]) = 6.779[px] -->
         <Types>DsRed</Types>
      </Region>
   </Steppable>
</CompuCell3D>
